### Atiq UR Rahman
###PhD Student IoP, Academia Sinica
##01-01-2022


#/control/execute                         visu.mac
#/vis/disable
#/vis/open                                	      OGLSX 1200 1200
#/vis/viewer/set/viewpointThetaPhi                     60 60
#/vis/viewer/zoom                                      1.0
#/vis/drawVolume
#/tracking/storeTrajectory           	              1
#/vis/scene/add/trajectories
#/vis/scene/endOfEventAction                          accumulate
#/vis/scene/endOfEventAction accumulate               10

/gate/geometry/setMaterialDatabase                    GateMaterials.db #  GateMaterials.db
/gate/world/setMaterial                               Vacuum
/gate/world/geometry/setXLength                       100 cm
/gate/world/geometry/setYLength                       100 cm
/gate/world/geometry/setZLength                       100 cm

/gate/world/daughters/name                    	      phantomBase
/gate/world/daughters/insert                          box
/gate/phantomBase/geometry/setXLength                 50  mm
/gate/phantomBase/geometry/setYLength                 50  mm
/gate/phantomBase/geometry/setZLength                 210 mm
/gate/phantomBase/placement/setTranslation            0.0 0.0 115.0 mm 
/gate/phantomBase/setMaterial                         Air
#/gate/phantomBase/vis/forceSolid
/gate/phantomBase/vis/setColor                        green
/gate/phantomBase/vis/setVisible                      1



/gate/phantomBase/daughters/name                      PMMA1
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA1/geometry/setRmax                        25 mm
/gate/PMMA1/geometry/setHeight                      10 mm
/gate/PMMA1/placement/setTranslation             0.0 0.0 -100 mm
/gate/PMMA1/setMaterial                             PMMA
#/gate/PMMA1/vis/forceWireframe  
#/gate/PMMA1/vis/setColor                           white
/gate/PMMA1/vis/setVisible                          1
/gate/PMMA1/vis/setColor red
/gate/PMMA1/vis/forceSolid

/gate/phantomBase/daughters/name                      PE1
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE1/geometry/setRmax                        25 mm
/gate/PE1/geometry/setHeight                      10 mm
/gate/PE1/placement/setTranslation             0.0 0.0 -90 mm
/gate/PE1/setMaterial                             Polyethylene
#/gate/PE1/vis/forceWireframe  
#/gate/PE1/vis/setColor                           yellow
/gate/PE1/vis/setVisible                          1
/gate/PE1/vis/setColor blue
/gate/PE1/vis/forceSolid



/gate/phantomBase/daughters/name                      PMMA2
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA2/geometry/setRmax                        25 mm
/gate/PMMA2/geometry/setHeight                      10 mm
/gate/PMMA2/placement/setTranslation             0.0 0.0 -80 mm
/gate/PMMA2/setMaterial                             PMMA
#/gate/PMMA2/vis/forceWireframe  
#/gate/PMMA2/vis/setColor                           white
/gate/PMMA2/vis/setVisible                          1
/gate/PMMA2/vis/setColor red
/gate/PMMA2/vis/forceSolid


/gate/phantomBase/daughters/name                      PE2
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE2/geometry/setRmax                        25 mm
/gate/PE2/geometry/setHeight                      10 mm
/gate/PE2/placement/setTranslation             0.0 0.0 -70 mm
/gate/PE2/setMaterial                             Polyethylene
#/gate/PE2/vis/forceWireframe  
#/gate/PE2/vis/setColor                           yellow
/gate/PE2/vis/setVisible                          1
/gate/PE2/vis/setColor blue
/gate/PE2/vis/forceSolid

/gate/phantomBase/daughters/name                      PMMA3
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA3/geometry/setRmax                        25 mm
/gate/PMMA3/geometry/setHeight                      10 mm
/gate/PMMA3/placement/setTranslation             0.0 0.0 -60 mm
/gate/PMMA3/setMaterial                             PMMA
#/gate/PMMA3/vis/forceWireframe  
#/gate/PMMA3/vis/setColor                           white
/gate/PMMA3/vis/setVisible                          1
/gate/PMMA3/vis/setColor red
/gate/PMMA3/vis/forceSolid
#

/gate/phantomBase/daughters/name                      PE3
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE3/geometry/setRmax                        25 mm
/gate/PE3/geometry/setHeight                      10 mm
/gate/PE3/placement/setTranslation             0.0 0.0 -50 mm
/gate/PE3/setMaterial                             Polyethylene
#/gate/PE3/vis/forceWireframe  
#/gate/PE3/vis/setColor                           yellow
/gate/PE3/vis/setVisible                          1
/gate/PE3/vis/setColor blue
/gate/PE3/vis/forceSolid

/gate/phantomBase/daughters/name                      PMMA4
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA4/geometry/setRmax                        25 mm
/gate/PMMA4/geometry/setHeight                      10 mm
/gate/PMMA4/placement/setTranslation             0.0 0.0 -40 mm
/gate/PMMA4/setMaterial                             PMMA
#/gate/PMMA4/vis/forceWireframe  
#/gate/PMMA4/vis/setColor                           white
/gate/PMMA4/vis/setVisible                          1
/gate/PMMA4/vis/setColor red
/gate/PMMA4/vis/forceSolid


/gate/phantomBase/daughters/name                      PE4
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE4/geometry/setRmax                        25 mm
/gate/PE4/geometry/setHeight                      10 mm
/gate/PE4/placement/setTranslation             0.0 0.0 -30 mm
/gate/PE4/setMaterial                             Polyethylene
#/gate/PE4/vis/forceWireframe  
#/gate/PE4/vis/setColor                           yellow
/gate/PE4/vis/setVisible                          1
/gate/PE4/vis/setColor blue
/gate/PE4/vis/forceSolid

/gate/phantomBase/daughters/name                      PMMA5
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA5/geometry/setRmax                        25 mm
/gate/PMMA5/geometry/setHeight                      10 mm
/gate/PMMA5/placement/setTranslation             0.0 0.0 -20 mm
/gate/PMMA5/setMaterial                             PMMA
#/gate/PMMA5/vis/forceWireframe  
#/gate/PMMA5/vis/setColor                           white
/gate/PMMA5/vis/setVisible                          1
/gate/PMMA5/vis/setColor red
/gate/PMMA5/vis/forceSolid

/gate/phantomBase/daughters/name                      PE5
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE5/geometry/setRmax                        25 mm
/gate/PE5/geometry/setHeight                      10 mm
/gate/PE5/placement/setTranslation             0.0 0.0 -10 mm
/gate/PE5/setMaterial                             Polyethylene
#/gate/PE5/vis/forceWireframe  
#/gate/PE5/vis/setColor                           yellow
/gate/PE5/vis/setVisible                          1
/gate/PE5/vis/setColor blue
/gate/PE5/vis/forceSolid

/gate/phantomBase/daughters/name                      PMMA6
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA6/geometry/setRmax                        25 mm
/gate/PMMA6/geometry/setHeight                      10 mm
/gate/PMMA6/placement/setTranslation             0.0 0.0 0.0 mm
/gate/PMMA6/setMaterial                             PMMA
#/gate/PMMA6/vis/forceWireframe  
#/gate/PMMA6/vis/setColor                           white
/gate/PMMA6/vis/setVisible                          1
/gate/PMMA6/vis/setColor red
/gate/PMMA6/vis/forceSolid


/gate/phantomBase/daughters/name                      PE6
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE6/geometry/setRmax                        25 mm
/gate/PE6/geometry/setHeight                      10 mm
/gate/PE6/placement/setTranslation             0.0 0.0 10 mm
/gate/PE6/setMaterial                             Polyethylene
#/gate/PE6/vis/forceWireframe  
#/gate/PE6/vis/setColor                           yellow
/gate/PE6/vis/setVisible                          1
/gate/PE6/vis/setColor blue
/gate/PE6/vis/forceSolid

/gate/phantomBase/daughters/name                      PMMA7
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA7/geometry/setRmax                        25 mm
/gate/PMMA7/geometry/setHeight                      10 mm
/gate/PMMA7/placement/setTranslation             0.0 0.0 20 mm
/gate/PMMA7/setMaterial                             PMMA
#/gate/PMMA7/vis/forceWireframe  
#/gate/PMMA7/vis/setColor                           white
/gate/PMMA7/vis/setVisible                          1
/gate/PMMA7/vis/setColor red
/gate/PMMA7/vis/forceSolid

/gate/phantomBase/daughters/name                      PE7
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE7/geometry/setRmax                        25 mm
/gate/PE7/geometry/setHeight                      10 mm
/gate/PE7/placement/setTranslation             0.0 0.0 30 mm
/gate/PE7/setMaterial                             Polyethylene
#/gate/PE7/vis/forceWireframe  
#/gate/PE7/vis/setColor                           yellow
/gate/PE7/vis/setVisible                          1
/gate/PE7/vis/setColor blue
/gate/PE7/vis/forceSolid

/gate/phantomBase/daughters/name                      PMMA8
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA8/geometry/setRmax                        25 mm
/gate/PMMA8/geometry/setHeight                      10 mm
/gate/PMMA8/placement/setTranslation             0.0 0.0 40 mm
/gate/PMMA8/setMaterial                             PMMA
#/gate/PMMA8/vis/forceWireframe  
#/gate/PMMA8/vis/setColor                           white
/gate/PMMA8/vis/setVisible                          1
/gate/PMMA8/vis/setColor red
/gate/PMMA8/vis/forceSolid

/gate/phantomBase/daughters/name                      PE8
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE8/geometry/setRmax                        25 mm
/gate/PE8/geometry/setHeight                      10 mm
/gate/PE8/placement/setTranslation             0.0 0.0 50 mm
/gate/PE8/setMaterial                             Polyethylene
#/gate/PE8/vis/forceWireframe  
#/gate/PE8/vis/setColor                           yellow
/gate/PE8/vis/setVisible                          1
/gate/PE8/vis/setColor blue
/gate/PE8/vis/forceSolid

/gate/phantomBase/daughters/name                      PMMA9
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA9/geometry/setRmax                        25 mm
/gate/PMMA9/geometry/setHeight                      10 mm
/gate/PMMA9/placement/setTranslation             0.0 0.0 60 mm
/gate/PMMA9/setMaterial                             PMMA
#/gate/PMMA9/vis/forceWireframe  
#/gate/PMMA9/vis/setColor                           white
/gate/PMMA9/vis/setVisible                          1
/gate/PMMA9/vis/setColor red
/gate/PMMA9/vis/forceSolid

/gate/phantomBase/daughters/name                      PE9
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE9/geometry/setRmax                        25 mm
/gate/PE9/geometry/setHeight                      10 mm
/gate/PE9/placement/setTranslation             0.0 0.0 70 mm
/gate/PE9/setMaterial                             Polyethylene
#/gate/PE9/vis/forceWireframe  
#/gate/PE9/vis/setColor                           yellow
/gate/PE9/vis/setVisible                          1
/gate/PE9/vis/setColor blue
/gate/PE9/vis/forceSolid

/gate/phantomBase/daughters/name                      PMMA10
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA10/geometry/setRmax                        25 mm
/gate/PMMA10/geometry/setHeight                      10 mm
/gate/PMMA10/placement/setTranslation             0.0 0.0 80 mm
/gate/PMMA10/setMaterial                             PMMA
#/gate/PMMA10/vis/forceWireframe  
#/gate/PMMA10/vis/setColor                           white
/gate/PMMA10/vis/setVisible                          1
/gate/PMMA10/vis/setColor red
/gate/PMMA10/vis/forceSolid

/gate/phantomBase/daughters/name                      PE10
/gate/phantomBase/daughters/insert                    cylinder
/gate/PE10/geometry/setRmax                        25 mm
/gate/PE10/geometry/setHeight                      10 mm
/gate/PE10/placement/setTranslation             0.0 0.0 90 mm
/gate/PE10/setMaterial                             Polyethylene
#/gate/PE10/vis/forceWireframe  
#/gate/PE10/vis/setColor                           yellow
/gate/PE10/vis/setVisible                          1
/gate/PE10/vis/setColor blue
/gate/PE10/vis/forceSolid


/gate/phantomBase/daughters/name                      PMMA11
/gate/phantomBase/daughters/insert                    cylinder
/gate/PMMA11/geometry/setRmax                        25 mm
/gate/PMMA11/geometry/setHeight                      10 mm
/gate/PMMA11/placement/setTranslation             0.0 0.0 100 mm
/gate/PMMA11/setMaterial                             PMMA
#/gate/PMMA11/vis/forceWireframe  
#/gate/PMMA11/vis/setColor                           white
/gate/PMMA11/vis/setVisible                          1
/gate/PMMA11/vis/setColor red
/gate/PMMA11/vis/forceSolid
#



/gate/actor/addActor ProductionAndStoppingActor        ActorC11
/gate/actor/ActorC11/attachTo                          phantomBase
/gate/actor/ActorC11/setResolution                     256 256 256
/gate/actor/ActorC11/stepHitType                       random
/gate/actor/ActorC11/addFilter                         particleFilter
/gate/actor/ActorC11/particleFilter/addParticle        C11
/gate/actor/ActorC11/save                               ./Zebra_90MeV/PAG_Map_Energy_90_MeV_C11.hdr

/gate/actor/addActor ProductionAndStoppingActor        ActorO15
/gate/actor/ActorO15/attachTo                          phantomBase
/gate/actor/ActorO15/setResolution                     256 256 256
/gate/actor/ActorO15/stepHitType                       random
/gate/actor/ActorO15/addFilter                         particleFilter
/gate/actor/ActorO15/particleFilter/addParticle        O15
/gate/actor/ActorO15/save                              ./Zebra_90MeV/PAG_Map_Energy_90_MeV_O15.hdr

/gate/actor/addActor ProductionAndStoppingActor        ActorN13
/gate/actor/ActorN13/attachTo                          phantomBase
/gate/actor/ActorN13/setResolution                     256 256 256
/gate/actor/ActorN13/stepHitType                       random
/gate/actor/ActorN13/addFilter                         particleFilter
/gate/actor/ActorN13/particleFilter/addParticle        N13
/gate/actor/ActorN13/save                              ./Zebra_90MeV/PAG_Map_Energy_90_MeV_N13.hdr

#//Positron-Emitters

/gate/actor/addActor ProductionAndStoppingActor          ActorC11_1D
/gate/actor/ActorC11_1D/attachTo                         phantomBase
/gate/actor/ActorC11_1D/setResolution                    1 1  420
/gate/actor/ActorC11_1D/stepHitType                      random
/gate/actor/ActorC11_1D/addFilter                        particleFilter
/gate/actor/ActorC11_1D/particleFilter/addParticle       C11
/gate/actor/ActorC11_1D/save                            ./Zebra_90MeV/PAG_Map_Energy_90_MeV_C11.root

/gate/actor/addActor ProductionAndStoppingActor          ActorO15_1D
/gate/actor/ActorO15_1D/attachTo                         phantomBase
/gate/actor/ActorO15_1D/setResolution                    1 1 420
/gate/actor/ActorO15_1D/stepHitType                      random
/gate/actor/ActorO15_1D/addFilter                        particleFilter
/gate/actor/ActorO15_1D/particleFilter/addParticle       O15
/gate/actor/ActorO15_1D/save                            ./Zebra_90MeV/PAG_Map_Energy_90_MeV_O15.root

/gate/actor/addActor ProductionAndStoppingActor          ActorN13_1D
/gate/actor/ActorN13_1D/attachTo                         phantomBase
/gate/actor/ActorN13_1D/setResolution                    1 1 420
/gate/actor/ActorN13_1D/stepHitType                      random
/gate/actor/ActorN13_1D/addFilter                        particleFilter
/gate/actor/ActorN13_1D/particleFilter/addParticle       N13
/gate/actor/ActorN13_1D/save                            ./Zebra_90MeV/PAG_Map_Energy_90_MeV_N13.root



/gate/actor/addActor ProductionAndStoppingActor          ActorC11_1D_txt
/gate/actor/ActorC11_1D_txt/attachTo                         phantomBase
/gate/actor/ActorC11_1D_txt/setResolution                    1 1  420
/gate/actor/ActorC11_1D_txt/stepHitType                      random
/gate/actor/ActorC11_1D_txt/addFilter                        particleFilter
/gate/actor/ActorC11_1D_txt/particleFilter/addParticle       C11
/gate/actor/ActorC11_1D_txt/save                            ./Zebra_90MeV/PAG_Map_Energy_90_MeV_C11.txt

/gate/actor/addActor ProductionAndStoppingActor          ActorO15_1D_txt
/gate/actor/ActorO15_1D_txt/attachTo                         phantomBase
/gate/actor/ActorO15_1D_txt/setResolution                    1 1 420
/gate/actor/ActorO15_1D_txt/stepHitType                      random
/gate/actor/ActorO15_1D_txt/addFilter                        particleFilter
/gate/actor/ActorO15_1D_txt/particleFilter/addParticle       O15
/gate/actor/ActorO15_1D_txt/save                            ./Zebra_90MeV/PAG_Map_Energy_90_MeV_O15.txt

/gate/actor/addActor ProductionAndStoppingActor          ActorN13_1D_txt
/gate/actor/ActorN13_1D_txt/attachTo                         phantomBase
/gate/actor/ActorN13_1D_txt/setResolution                    1 1 420
/gate/actor/ActorN13_1D_txt/stepHitType                      random
/gate/actor/ActorN13_1D_txt/addFilter                        particleFilter
/gate/actor/ActorN13_1D_txt/particleFilter/addParticle       N13
/gate/actor/ActorN13_1D_txt/save                            ./Zebra_90MeV/PAG_Map_Energy_90_MeV_N13.txt


/gate/actor/addActor                                 	 DoseActor  doseDistribution2D
/gate/actor/doseDistribution2D/save                  	./Zebra_90MeV/Dose_Map_Energy_90_MeV_2D.root
/gate/actor/doseDistribution2D/attachTo              	 phantomBase
/gate/actor/doseDistribution2D/stepHitType           	 random
/gate/actor/doseDistribution2D/setResolution         	 420 1 420
/gate/actor/doseDistribution2D/enableDose            	 true

/gate/actor/addActor                                     DoseActor  doseDistribution1D
/gate/actor/doseDistribution1D/save                  	./Zebra_90MeV/Dose_Map_Energy_90_MeV_1D.root
/gate/actor/doseDistribution1D/attachTo              	 phantomBase
/gate/actor/doseDistribution1D/stepHitType           	 random
/gate/actor/doseDistribution1D/setResolution             1 1 420
/gate/actor/doseDistribution1D/enableDose                true


/gate/actor/addActor                                     DoseActor  doseDistribution1D_txt
/gate/actor/doseDistribution1D_txt/save                  	./Zebra_90MeV/Dose_Map_Energy_90_MeV_1D.txt
/gate/actor/doseDistribution1D_txt/attachTo              	 phantomBase
/gate/actor/doseDistribution1D_txt/stepHitType           	 random
/gate/actor/doseDistribution1D_txt/setResolution             1 1 420
/gate/actor/doseDistribution1D_txt/enableDose                true

/gate/physics/addPhysicsList QGSP_BIC_HP_EMZ
/gate/run/initialize

/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto

/gate/source/addSource 			                 PBS      PencilBeam
/gate/source/PBS/setParticleType 	                 proton
/gate/source/PBS/setEnergy 			                90 MeV
/gate/source/PBS/setSigmaEnergy 	                 0.59 MeV
/gate/source/PBS/setPosition 		                 0 0 -22 cm
/gate/source/PBS/setSigmaX 		                    15.09 mm
/gate/source/PBS/setSigmaY 		                    14.53  mm
/gate/source/PBS/setSigmaTheta 		                 20 mrad
/gate/source/PBS/setSigmaPhi   		                 20 mrad
/gate/source/PBS/setEllipseXThetaEmittance 	         40 mm*mrad #40 mm*mrad, 2mm*mrad
/gate/source/PBS/setEllipseYPhiEmittance   	         40 mm*mrad #40 mm*mrad, 2mm*mrad
/gate/source/PBS/setEllipseXThetaRotationNorm 	         positive
/gate/source/PBS/setEllipseYPhiRotationNorm   	         positive
/gate/application/setTotalNumberOfPrimaries 	         10000000
/gate/application/start
